PsychoPy2experiment version="1.85.3"
Settings
  Monitor = default
  color = black
  Experiment info = {u'Eye Tracker': u'SRR_eyelink_std.yaml', u'Participant': u'1'}
  Units = deg
  Window size (pixels) = [2560,1600]
  Full-screen window = False
  Save wide csv file = False
  Show mouse = True
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['Participant'], expInfo['date'])
  Show info dlg = False
  expName = mainseq_stradapt5
  logging level = warning
  Screen = 1
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Routines
  Routine ITI
    CodeComponent code
      Begin Experiment:
        trialnum = 0;
      Begin Routine:
        print 'inside ITI now'

        #fp windows set
        fpwinx = fpwin_all # in degrees
        fpwiny = fpwin_all

        if eyetracker:
            #heldFixation = True #unless otherwise
            io.clearEvents('all')
            eyetracker.setRecordingState(True)
            print "FP0: eyetracker.setRecordingState(True)"

        # smooth pursuit starting location at eccentricity
        if trialtype == 3:
            FP0_circle.pos = fp2loc
            # get new location of FP2 for window
            fp0x = fp2loc[0]
            fp0y = fp2loc[1]
        else: #center 0,0 is starting FP0
            fp0x = 0
            fp0y = 0

        #if showwin == 1:
        #    print "inside FPx_window show: %d %d" % (fp0x, fp0y)
        #if showwin == 0:
        #    FPx_window.opacity = 0
        #    FPx_window.draw()
      Each Frame:
        if moe == 1:
            mxy = mouse.getPosition()
            # could try using numpy np. instead but this for now:
            mxy = [mxy[0]/mxydiv_factor,mxy[1]/mxydiv_factor]
            x=mxy[0] # this in degrees now
            y=mxy[1]
        elif moe == 2:
            # get /eye tracker gaze/ position
            gpos=eyetracker.getPosition()
            if type(gpos) in [list,tuple]:
                x,y=gpos[0], gpos[1]
        elif moe == 200:
            res = iViewXAPI.iV_GetSample(byref(sampleData))
            mxy[0] = sampleData.leftEye.gazeX
            mxy[1] = sampleData.leftEye.gazeY
            x = (mxy[0] - screen_width/2)/pixperdegree
            y = ((screen_height/2) - mxy[1])/pixperdegree

        if rendeye == 1 :
        #    Image.setImage(images[index])
        #    Image.draw(window)
            #annoyingly eye position is returned as pixels, not degrees, upper left is 0,0.
            Shape01.setFillColor([0, 0, 0])
            #sampleData.leftEye.gazeX = sampleData.leftEye.gazeX - screen_width/2
            #sampleData.leftEye.gazeY = -1 * (sampleData.leftEye.gazeY - screen_height/2)
            #x= mxy[0]- (screen_width/2)
            #y= (-1 * mxy[1])

            #Shape01.setPos([sampleData.leftEye.gazeX, sampleData.leftEye.gazeY])
            Shape01.setPos([x, y])
            Shape01.draw()
            #tmptxt = 'x=%0.1f  y=%0.1f' %(x,y)
            #tmptxt = 'dx=%0.1f  dy=%0.1f' %(x-fp0x,y-fp0y)
            dispcountdown1 = 0 # routineTimer.getTime()
            dispcountdown2 = 0 #windowTimer.getTime()
            #if dispcountdown2 < 0:
            #    Text01.setColor((128,128,128),'rgb255') # set color to gray when count is <0
            #else:
            #    Text01.setColor((254,254,254),'rgb255')
            tmptxt = 'FP0: dx=%0.1f  dy=%0.1f\n   rT=%0.2f  wT=%0.2f' %(x-fp0x,y-fp0y,dispcountdown1,dispcountdown2)
            Text01.setText(text=tmptxt) # using setTextsuppresses logmsg
            Text01.setPos([x,y])
            Text01.draw()
            #update eye position



        #determine diff between eye/mouse and fp
        diffx = x-fp0x
        diffy = y-fp0y

        if debugflag == 1:
            ansx = abs(diffx)<fpwinx
            ansy = abs(diffy)<fpwiny
            #print "fp0: x:%d-%d=%d y:%d-%d=%d" % (mxy[0],fp0x,diffx,mxy[1],fp0y,diffy)
            print "fp0: x:%d-%d=%d < %d:%d y:%d-%d=%d < %d:%d" % (mxy[0],fp0x,diffx,fpwinx,ansx,mxy[1],fp0y,diffy,fpwiny,ansy)
            print "fp0: abs(mxy[0]-fp0x)=%d abs(mxy[1]-fp0y)=%d)" % (abs(mxy[0]-fp0x), abs(mxy[1]-fp0y))


        #if showwin == 1:
        #    FPx_window.pos = (fp0x, fp0y)
        #    FPx_window.draw()
        #elif showwin == 0:
        #    FPx_window.opacity = 0
            #FPx_window.draw()

        #no Need for this in ITI:
        # test if eye is in window
        #if ( abs(diffx) < fpwinx and abs(diffy) < fpwiny):
        #    FP0_rep.finished=1
        #    FPx_window.setColor = ((255,0,0), 'rgb255')
        #    if debugflag == 1:
        #        print "fp0: should exit"
        #elif (abs(diffx) > fpwinx or abs(diffy) > fpwiny):
        #    FPx_window.setColor = ((255,255,255), 'rgb255')
  Routine StartupInstr
    CodeComponent StartupCode
      Begin Experiment:
        #BUG in iohub having window initiate before iohub does forces us to do this:
        win.close() # is used to close the current window so it won't interfere/block calibration API
        #tyest
        #import pylink
        import time
        #Test change2

        #from psychopy.iohub import launchHubServer

        #eyetracker =True # leave this true even if don't have one will select moe =1 mouse manually

        fpwin_all = 2 #degrees window allowed to reach target
        debugflag = 0 # turn this to 1 to show xy position output in shell
        showwin   = 1 # 1 to show window boundaries
        moe = 2 # 1 = mouse OR 2 = eye tracker by default
        rendeye = 1 # renders the eye position info
        mxy = [0,0]
        # some default variable declarations:
        polyColor = "white" # default
        fpwinx = 1
        fpwiny = 1
        fp2winx = 1
        fp2winy = 1
        trialtype = 1

        # DETERMINE SCREEN WIDTH AND SIZE HERE
        # DISABLE THIS EVENTUALLY IT DOESN'T WORK
        #from sys import platform as _platform
        #if _platform == "linux" or _platform == "linux2":
           # linux
        #    print "linux!"
        #elif _platform == "darwin":
           # MAC OS X
        #    import AppKit
        #    tmp=[(screen.frame().size.width, screen.frame().size.height) for screen in AppKit.NSScreen.screens()]
        #    System_mon_width = tmp[0][0]
        #    System_mon_height = tmp[0][1]
        #    print "mac OS darwin detected"
        #elif _platform == "win32":
        #    from win32api import GetSystemMetrics
        #    System_mon_width = GetSystemMetrics(0)
        #    System_mon_height = GetSystemMetrics(1)
        #    print "windows platform detected"
           # Windows
        #print "System determined monitor Width =", System_mon_width
        #print "System determined monitor height =", System_mon_height

        #
        # SYSTEM MONITOR SIZE BETTER TO CUSTOM MAKE IT FOR EACH CONFIGURATION
        #
        #It appears on my home PC that the mouse pixel location is 33x pixels per degree
        #we'll make the fp windows 1.5 degrees error
        import socket

        if socket.gethostname() in ('LinerW10'):
            mxydiv_factor = 34 #mouse pixel units/degree
            # I had to hard code this because 2nd monitor resolution wasn't able to be grabbed easily
            screen_width = 2560
            screen_height = 1440 #overlord monitor v pix
            print "Eye Tracker off at home W10"
            eyetracker=True # no trackder at home
            moe = 1 # mouse at home
            useRetinaBool = False
            print "LinerW10 PC: Eyetracker = " + str(eyetracker) + " moe = " + str(moe)
            psychopy_mon_name ='default'
            displayDevice = 0 #1 to display and calibrate eye position 2nd monitor. Keep at 0 to to display on primary monitor
        elif 'Liner' in socket.gethostname()\
            or 'Alexanders' in socket.gethostname()\
            or 'Amalias' in socket.gethostname()\
            or 'Aryas-Macbook' in socket.gethostname()\
            or 'Kirsties' in socket.gethostname(): # Linus's Laptop
            mxydiv_factor = 33 #pixels/degree (good for home and mac laptop)
            # I had to hard code this because 2nd monitor resolution wasn't able to be grabbed easily
            screen_width = 2560
            screen_height = 1600 # vpix for MBP 13"
            eyetracker = False # no tracker attached to MBP
            moe = 1 # mouse only for laptop
            useRetinaBool = True
            psychopy_mon_name='PGLR'
            print "MBP: Eyetracker = " + str(eyetracker) + " moe = " + str(moe)
            displayDevice = 0 #1 to display and calibrate eye position 2nd monitor. Keep at 0 to to display on primary monitor
        elif 'HL8BRQT' in socket.gethostname()\
            or 'SurfacePro' in socket.gethostname(): # Linus's Laptop
            mxydiv_factor = 33 #pixels/degree (good for home and mac laptop)
            # I had to hard code this because 2nd monitor resolution wasn't able to be grabbed easily
            screen_width = 1366
            screen_height = 768 # vpix for MBP 13"
            eyetracker = False # no tracker attached to MBP
            moe = 1 # mouse only for laptop
            useRetinaBool = False
            psychopy_mon_name='PGL'
            print "Ryu: Eyetracker = " + str(eyetracker) + " moe = " + str(moe)
            displayDevice = 0 #1 to display and calibrate eye position 2nd monitor. Keep at 0 to to display on primary monitor
        elif socket.gethostname() in ('latoya-palmers-imac.local'):
            mxydiv_factor = 25 #pixels/degree (good for home and mac laptop)
            # I had to hard code this because 2nd monitor resolution wasn't able to be grabbed easily
            screen_width = 1680
            screen_height = 1050
            psychopy_mon_name='iMac'
            useRetinaBool = False
            eyetracker = True # yes there is an eye link attached to latoyas
            displayDevice = 1 #1 to display and calibrate eye position 2nd monitor. Keep at 0 to to display on primary monitor
        elif socket.gethostname() in ('PsyPyHuman'): # This was for Win10 on Mac machine
            mxydiv_factor = 17.42 #mouse pixel units/degree
            # Gui to decide which monitor you want to do expt
            guititle = 'Which monitor for display? (1-primary) (2-secondary)?'  # from the Builder filename that created this script
            #guichoice = {'Win_tolerance':'3','Calibrate(Y/N)': 'N','Monitor(1/2)': '2','(2)EyeTracker/(1)Mouse?':'2'}
            guichoice = {'Calibrate(Y/N)': 'N','Monitor(1/2)': '2','(2)EyeTracker/(1)Mouse?':'2'}
            dlg = gui.DlgFromDict(dictionary=guichoice, title=guititle)
            if dlg.OK == False: core.quit()  # user pressed cancel
            # I had to hard code this because 2nd monitor resolution wasn't able to be grabbed easily
            #fpwin_all = guichoice['Win_tolerance']
            if guichoice['Monitor(1/2)'] == '1':
                screen_width = 2560
                screen_height = 1440
                psychopy_mon_name='BenQ'
                displayDevice = 0 #1 to display and calibrate eye position 2nd monitor. Keep at 0 to to display on primary monitor
            elif guichoice['Monitor(1/2)'] == '2':
                screen_width = 1024
                screen_height = 768
                psychopy_mon_name='testMonitor'
                displayDevice = 1 #1 to display and calibrate eye position 2nd monitor. Keep at 0 to to display on primary monitor
            if guichoice['(2)EyeTracker/(1)Mouse?'] == '1':
                moe = 1
            elif guichoice['(2)EyeTracker/(1)Mouse?'] == '2':
                moe = 2
        else: # default computer screens
            mxydiv_factor = 33 #pixels/degree (good for home and mac laptop)
            # I had to hard code this because 2nd monitor resolution wasn't able to be grabbed easily
            screen_width = 1024
            screen_height = 768
            eyetracker = False # default no tracker
            useRetinaBool = False
            psychopy_mon_name='testMonitor'
            displayDevice = 0 #1 to display and calibrate eye position 2nd monitor. Keep at 0 to to display on primary monitor

        print "Custom Code determined python app display monitor Width =", screen_width
        print "Custom Code determined python app display monitor height =", screen_height

        # this will always run by default
        if expInfo['Eye Tracker']:
            try:
                from psychopy.iohub import EventConstants,ioHubConnection,load,Loader
                from psychopy.iohub.util import NumPyRingBuffer
                from psychopy.data import getDateStr
                # Load the specified iohub configuration file converting it to a python dict.
                io_config=load(file(expInfo['Eye Tracker'],'r'), Loader=Loader)

                # Add / Update the session code to be unique. Here we use the psychopy getDateStr() function for session code generation
                session_info=io_config.get('data_store').get('session_info')
                session_info.update(code="S_%s"%(getDateStr()))

                # Create an ioHubConnection instance, which starts the ioHubProcess, and informs it of the requested devices and their configurations.
                if eyetracker == True:
                    io=ioHubConnection(io_config)
                    # mouse unit reports for position totally different if called by launchHubServer(need div myxypixperdegree) and ioHubConnection
                    if moe == 1:
                        # if using mouse with ioHubConnection launching function, then don't divide
                        mxydiv_factor = 1
                else:
                    from psychopy.iohub import launchHubServer
                    print "EXECUTING REDUCED io=launchHubServer instead of ioHubConnection because no eye tracker"
                    # trouble with loading io_config tracker info in it. so load limited tracker
                    sess_code='S_{0}'.format(long(time.mktime(time.localtime())))
                    exp_code='data\test' + sess_code
                    #exp_code will be the file name for data
                    print 'Current Session Code will be: ', sess_code
                    io=launchHubServer(psychopy_monitor_name=psychopy_mon_name, experiment_code=exp_code, session_code=sess_code)


                # access the iohub devices of the keyboard and mouse inputs
                iokeyboard=io.devices.keyboard
                # mouse unit reports for position totally different if called by launchHubServer(need div myxypixperdegree) and ioHubConnection
                mouse=io.devices.mouse
                if (eyetracker==True) and io.getDevice('tracker'):
                    eyetracker=io.getDevice('tracker')
                    eyetracker.runSetupProcedure()

            except Exception, e:
               import sys
               print "!! Error starting ioHub: ",e," Exiting..."
               sys.exit(1)

            display_gaze=True
            x,y=0,0

        # Start the ioHub process. The return variable is what is used
        # during the experiment to control the iohub process itself,
        # as well as any running iohub devices.
        #io=launchHubServer()
        #io=launchHubServer(psychopy_monitor_name=psychopy_mon_name, experiment_code=exp_code, session_code=sess_code)

        # Now that iohub has been launched by the eye tracker code, open a window:
        win = visual.Window(
            size=(screen_width,screen_height), fullscr=True, screen=0,
            allowGUI=True, allowStencil=False,
            monitor=psychopy_mon_name, color='black', colorSpace='rgb',
            blendMode='avg', useFBO=True, useRetina=True,
            units='deg')

        #display = io.devices.display

        #from pprint import pprint
        #pprint(vars(display))

        # print(the display's physical characteristics, showing they have
        # been updated based on the settings in the PsychoPy monitor config.
        #print('Display Psychopy displaycount: ', display.getDisplayCount())
        #print('Display Psychopy device number: ', display.getDeviceNumber())
        #print('Display Psychopy Monitor Name: ', display.getPsychopyMonitorName())
        #print('Display Default Eye Distance: ', display.getDefaultEyeDistance())
        #print('Display Physical Dimensions: ', display.getPhysicalDimensions())
        #print('Display Physical pixels per degree: ', display.getPixelsPerDegree())

        #pixperdegree = display.getPixelsPerDegree()
        #HACK I know it's 17.42 for psychopy upstairs on 8th
        pixperdegree = 17.24



        # By default, ioHub will create Keyboard and Mouse devices and
        # start monitoring for any events from these devices only.
        #keyboard=io.devices.keyboard
        #mouse=io.devices.mouse


        #Define the first time instructions are seen
        instr_rep_cont = 1

        #Define instruction sets (according to trialtype) that have been displayed already
        ttype1_instr = 0
        ttype2_instr = 0
        ttype3_instr = 0


        if moe == 200: # this may be deprecated for eyelink
            # ---------------------------------------------
            #---- connect to iView
            # ---------------------------------------------
            from iViewXAPI import  *               #iViewX library
            import PIL

            res = iViewXAPI.iV_SetLogger(c_int(1), c_char_p("iViewXSDK_Python_GazeContingent_Demo.txt"))
            print res

            #OLD tracker ip address?
            #res=iViewXAPI.iv_Connect(c_char_p('169.254.20.13'),c_int(4444), c_char_p('169.254.34.44'),c_int(5555))

            res = iViewXAPI.iV_Connect(c_char_p('169.254.20.13'), c_int(4444), c_char_p('169.254.20.100'), c_int(5555))
            #set 20.10 to port 5555 8/2015

            print res
            if res == 100:
                print 'failed to establish connection'

            #print dir(iViewXAPI)

            res = iViewXAPI.iV_GetSystemInfo(byref(systemData))
            print "iV_GetSystemInfo: " + str(res)
            print "Samplerate: " + str(systemData.samplerate)
            print "iViewX Version: " + str(systemData.iV_MajorVersion) + "." + str(systemData.iV_MinorVersion) + "." + str(systemData.iV_Buildnumber)
            print "iViewX API Version: " + str(systemData.API_MajorVersion) + "." + str(systemData.API_MinorVersion) + "." + str(systemData.API_Buildnumber)

            # ---------------------------------------------
            #---- configure and start calibration
            # ---------------------------------------------
            # the second monitor needs displayDevice = 1
            # on Windows 7 Mac upstairs 8th floor set this to 0 and mirror screen in Windows7
            # OR SET displayDevice = 1 which allows calibration to occur on the dual monitor (CRT)
            #calibrationData = CCalibration(5, 1, displayDevice, 0, 1, 20, 239, 1, 10, b"")
            #calibrationData = CCalibration(13, 1, displayDevice, 0, 1, 20, 239, 1, 10, b"")
            calibrationData = CCalibration(13, 1, displayDevice, 0, 1, 239, 20, 1, 10, b"")
            # 13 points calibration instead of 5 is much more accurate

            #CalibrationStruct Datafields:
            #method (5 or 13)
            #visualization (0:viz by ext stim program 1: viz by SDK (default)
            #displayDevice (set Display Device [0: primary device (default), 1: secondary device]
            #speed: set Calibration/Validation speed [0: slow (default), 1: fast]
            #autoAccept: set Calibration/Validation point acceptance [1: automatic (default) 0: manual]
            #foregroundBrightness: set Calibration/Validation target brightness [0..255] (default: 20)
            #backgroundBrightness: set Calibration/Validation background brightness [0..255] (default: 239)
            #targetShape: set Calibration/Validation target shape [IMAGE = 0,CIRCLE1 = 1 (default), CIRCLE2 = 2, CROSS = 3]
            #targetSize: set Calibration/Validation target size (default: 10 pixels)
            #targetFilename: select custom Calibration/Validation target

            #CALIBRATION SCRIPT HERE:
            if guichoice['Calibrate(Y/N)'] == 'Y':
                res = iViewXAPI.iV_SetupCalibration(byref(calibrationData))
                print "iV_SetupCalibration " + str(res)
                res = iViewXAPI.iV_Calibrate()
                print "iV_Calibrate " + str(res)

            if res == 131:
                print "ERR_NO_RESPONSE_FROM_IVIEWX iView X (eyetracking server) application was not able to response to current request"

        # Setup the Window AGAIN (so it won't interfere with calibration API)
        # screen=1 instead of screen=0 will allow window to move to dual monitor. Only question is what is the value of the mouse or eye position information?
        #win = visual.Window(size=(screen_width,screen_height), fullscr=True, screen=displayDevice, allowGUI=False, allowStencil=False,
        #    monitor='testMonitor', color=[0,0,0], colorSpace='rgb',
        #    blendMode='avg', useFBO=True,
        #    units='deg')

        # setup eye position shape here so don't have to recreate it for FP0, FP, FP2
        # to move it with the eye, which is given in pixels, use unit pix

        Shape01 = visual.Polygon(win=win, name='FP0_circle',units='deg',
            edges = 10, size=[1,1],
            ori=0, pos=[0, 0],
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[0.7,0.7,0.7], fillColorSpace='rgb',
            opacity=0.5,depth=0.0,
            interpolate=True)

        Shape01.setAutoDraw(True)

        Text01 = visual.TextStim(win=win, text='', font='',
            pos=(0.0, 0.0), depth=0, rgb=None, color=(1.0, 1.0, 1.0),
            colorSpace='rgb', opacity=1.0, contrast=1.0, units='deg',
            ori=0.0, height=None, antialias=True, bold=False,
            italic=False, alignHoriz='center', alignVert='center',
            fontFiles=(), wrapWidth=None, flipHoriz=False, flipVert=False,
            name=None, autoLog=None)

        Text01.setAutoDraw(True)
      End Experiment:
        if eyetracker:
            eyetracker.setConnectionState(False)
            io.quit()
    TextComponent instrText
      wrapWidth = 800
      color = $[1, 1, 1]
      units = pix
      startVal [time (s)] = 0
      letterHeight = 50
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      text:
        Main Sequence Test

        Click on Window Once Then
        Press Any Key to Continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine FP1
    CodeComponent mouse_pos
      Begin Experiment:
        #FP1 default variables
        FP1_window_color = 'green' #  set default color green
      Begin Routine:
        print 'inside FP now'

        #resettimer must  set routineTimer to same as time as long as routine is
        routineTimer.reset(1)
        windowTimer.reset(EYEWINTIMECONST)

        #fp windows set
        fpwinx = fpwin_all
        fpwiny = fpwin_all

        # smooth pursuit starting location at eccentricity
        if trialtype == 3:
            FP_square.pos = fp2loc
            # get new location of FP2 for window
            fp1x = fp2loc[0]
            fp1y = fp2loc[1]
        else: #center 0,0 is starting FP0
            fp1x = 0
            fp1y = 0
      End Routine:
        # Need minimum of 1 second stay in FP then can continue

        #if ( abs(mxy[0]-fp1x) < fpwinx and abs(mxy[1]-fp1y) < fpwiny ):
        #    FP2cont=1
        #    FP1_rep.finished=1
            # this last command presentationLoop.finished, exits the FP repeating loops

        # If eye is in the window (don't need windowtimer really) then continue
        if ( abs(diffx) < fpwinx and abs(diffy) < fpwiny):
            FP2cont = 1
            FP1_rep.finished=1
        else:
            FP2cont=0

        if eyetracker:
            #eyetracker.setRecordingState(False) # don't
            #add eye-track data to data file
            trials.addData("FP1:heldFixation",True)
      Each Frame:
        if moe == 1:
            mxy = mouse.getPosition()
            # could try using numpy np. instead but this for now:
            mxy = [mxy[0]/mxydiv_factor,mxy[1]/mxydiv_factor]
            x=mxy[0] # this in degrees now
            y=mxy[1]
        elif moe == 2:
            # get /eye tracker gaze/ position
            gpos=eyetracker.getPosition()
            if type(gpos) in [list,tuple]:
                x,y=gpos[0], gpos[1]
        elif moe == 200:
            res = iViewXAPI.iV_GetSample(byref(sampleData))
            mxy[0] = sampleData.leftEye.gazeX # returns info in pixels
            mxy[1] = sampleData.leftEye.gazeY
            x = (mxy[0] - screen_width/2)/pixperdegree
            y = ((screen_height/2) - mxy[1])/pixperdegree


        if rendeye == 1 :
        #    Image.setImage(images[index])
        #    Image.draw(window)
            #annoyingly eye position is returned as pixels, not degrees, upper left is 0,0.
            Shape01.setFillColor([0, 0, 0])
            #sampleData.leftEye.gazeX = sampleData.leftEye.gazeX - screen_width/2
            #sampleData.leftEye.gazeY = -1 * (sampleData.leftEye.gazeY - screen_height/2)
            #x= mxy[0]- (screen_width/2)
            #y= (-1 * mxy[1])
            #Shape01.setPos([sampleData.leftEye.gazeX, sampleData.leftEye.gazeY])
            Shape01.setPos([x, y])
            Shape01.draw()
            # display timers and mouse/eye position
            dispcountdown1 = routineTimer.getTime()
            dispcountdown2 = windowTimer.getTime()
            #if dispcountdown2 < 0:
            #    Text01.setColor((128,128,128),'rgb255') # set color to gray when count is <0
            #else:
            #    Text01.setColor((254,254,254),'rgb255')
            tmptxt = 'FP1: dx=%0.1f  dy=%0.1f\n   rT=%0.2f  wT=%0.2f' %(x-fp0x,y-fp0y,dispcountdown1,dispcountdown2)
            #tmptxt = 'x=%0.1f  y=%0.1f' %(x,y)
            Text01.setText(text=tmptxt) # using setTextsuppresses logmsg
            Text01.setPos([x,y])
            Text01.draw()
            #update eye position

        # determine distsance between eye/mouse and fp1
        diffx= x-fp1x
        diffy= x-fp1y

        if debugflag == 1:
            print "fp1: x:%d-%d=%d y:%d-%d=%d" % (mxy[0],fp1x,diffx,mxy[1],fp1y,diffy)

        if showwin == 1:
            FP1_window.pos = (fp1x, fp1y)
            #FP1_window.draw()
        elif showwin == 0:
            FP1_window.opacity = 0

        # if leave the box, then start over
        # These flags will complete FP and FP2 loop and return to ITI
        if ( abs(diffx) > fpwinx or abs(diffy) > fpwiny):
            FP1_window_color = 'red'
            FP1_rep.finished = 1
            FP2cont = 0
            # if you lose fixation within a second, start again.
            # test if eye is in window
        elif ( abs(diffx) < fpwinx or abs(diffy) < fpwiny):
            FP1_window_color = 'green'


        #note FPcont is a variable used by FP2, if FPcont = 0
        #then FP2 will never be displayed and routine will repeat
    PolygonComponent FP1_square
      fillColor [set every repeat] = $polyColor
      stopVal [duration (s)] = 1.0
      units = deg
      lineColor [set every repeat] = $polyColor
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
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    PolygonComponent FP1_window
      opacity = 0.4
      fillColor [set every frame] = $FP1_window_color
      stopVal [duration (s)] = 1.0
      pos = [fpwinx*2, fpwiny*2]
      units = deg
      lineColor [set every frame] = $FP1_window_color
      startVal [time (s)] = 0.0
      size = [fpwin_all*2,fpwin_all*2]
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  Routine FP0
    PolygonComponent FP0_circle
      fillColor = $polyColor
      stopVal [duration (s)] = 0.5
      lineWidth = 0
      units = deg
      lineColor = $polyColor
      startVal [time (s)] = 0.5
      nVertices = 10
      size = (0.2, 0.2)
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    PolygonComponent FP0_window
      opacity = 0.3
      fillColor [set every frame] = $FP0_window_color
      stopVal [duration (s)] = 1.0
      pos = [fpwinx*2, fpwiny*2]
      lineWidth = 0
      units = deg
      lineColor [set every frame] = $FP0_window_color
      startVal [time (s)] = 0.0
      size = [fpwin_all*2,fpwin_all*2]
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    CodeComponent FP0_check
      Begin Experiment:
        #this will set the polygon to draw after each call of win.flip()
        #polygon.setAutoDraw(True)
        #
        #Timer for minimum amount of time eye must be in window
        EYEWINTIMECONST = 0.5 # 500ms
        # create handy time for FP0
        routineTimer = core.CountdownTimer() # Fixation Point General timer (routine fixed)
        windowTimer = core.CountdownTimer() # Fixation Window Timer
        # more FP0 constants
        FP0_window_color = 'white'
      Begin Routine:
        print 'inside FP0 now'
        routineTimer.reset(1) # 1 second routine timer must manually set this here to match FP0_circle and FPx_window time lengths
        windowTimer.reset(EYEWINTIMECONST) # reset eye window timer

        #fp windows set
        fpwinx = fpwin_all # in degrees
        fpwiny = fpwin_all

        # smooth pursuit starting location at eccentricity
        if trialtype == 3:
            FP0_circle.pos = fp2loc
            # get new location of FP2 for window
            fp0x = fp2loc[0]
            fp0y = fp2loc[1]
        else: #center 0,0 is starting FP0
            fp0x = 0
            fp0y = 0

        #if showwin == 1:
        #    print "inside FPx_window show: %d %d" % (fp0x, fp0y)
        #if showwin == 0:
        #    FPx_window.opacity = 0
        #    FPx_window.draw()


        #print mouse
      End Routine:
        #Only if eye has been in the window for the last EYEWINDOWTIMECONT time then do you move on
        if windowTimer.getTime()<0:
            FP0_rep.finished=1
        else:
            FP0_rep.finished=0
      Each Frame:
        #if mouse
        if moe == 1:
            mxy = mouse.getPosition()
            # could try using numpy np. instead but this for now:
            mxy = [mxy[0]/mxydiv_factor,mxy[1]/mxydiv_factor]
            x=mxy[0] # this in degrees now
            y=mxy[1]
        #else if not mouse then eye tracker:
        elif moe == 2:
            # get /eye tracker gaze/ position
            gpos=eyetracker.getPosition()
            if type(gpos) in [list,tuple]:
                x,y=gpos[0], gpos[1]
        elif moe == 200:
            res = iViewXAPI.iV_GetSample(byref(sampleData))
            mxy[0] = sampleData.leftEye.gazeX
            mxy[1] = sampleData.leftEye.gazeY
            x = (mxy[0] - screen_width/2)/pixperdegree
            y = ((screen_height/2) - mxy[1])/pixperdegree

        #determine distance between eye/mouse and fp
        diffx = x-fp0x
        diffy = y-fp0y

        # test if eye is in window
        if ( abs(diffx) < fpwinx and abs(diffy) < fpwiny):
            FP0_window_color = 'blue'
            if debugflag == 1:
                print "fp0: should exit"
        elif (abs(diffx) > fpwinx or abs(diffy) > fpwiny):
            FP0_window_color = 'white'
            windowTimer.reset(EYEWINTIMECONST) # if outside of the window reset the timer


        # Display Code:
        if showwin == 1:
            FP0_window.pos = (fp0x, fp0y)
            #FP0_window.draw()
        elif showwin == 0:
            FP0_window.opacity = 0
            #FP0_window.draw()

        if rendeye == 1 :
        #    Image.setImage(images[index])
        #    Image.draw(window)
            #annoyingly eye position is returned as pixels, not degrees, upper left is 0,0.
            Shape01.setFillColor([0, 0, 0])
            #sampleData.leftEye.gazeX = sampleData.leftEye.gazeX - screen_width/2
            #sampleData.leftEye.gazeY = -1 * (sampleData.leftEye.gazeY - screen_height/2)
            #x= mxy[0]- (screen_width/2)
            #y= (-1 * mxy[1])

            #Shape01.setPos([sampleData.leftEye.gazeX, sampleData.leftEye.gazeY])
            Shape01.setPos([x, y])
            Shape01.draw()
            #tmptxt = 'x=%0.1f  y=%0.1f' %(x,y)
            #tmptxt = 'dx=%0.1f  dy=%0.1f' %(x-fp0x,y-fp0y)
            dispcountdown1 = routineTimer.getTime()
            dispcountdown2 = windowTimer.getTime()
            #if dispcountdown2 < 0:
            #    Text01.setColor((128,128,128),'rgb255') # set color to gray when count is <0
            #else:
            #    Text01.setColor((254,254,254),'rgb255')
            tmptxt = 'FP0: dx=%0.1f  dy=%0.1f\n   rT=%0.2f  wT=%0.2f' %(x-fp0x,y-fp0y,dispcountdown1,dispcountdown2)
            Text01.setText(text=tmptxt) # using setTextsuppresses logmsg
            Text01.setPos([x,y])
            Text01.draw()
            #update eye position

        if debugflag == 1:
            ansx = abs(diffx)<fpwinx
            ansy = abs(diffy)<fpwiny
            #print "fp0: x:%d-%d=%d y:%d-%d=%d" % (mxy[0],fp0x,diffx,mxy[1],fp0y,diffy)
            print "fp0: x:%d-%d=%d < %d:%d y:%d-%d=%d < %d:%d" % (mxy[0],fp0x,diffx,fpwinx,ansx,mxy[1],fp0y,diffy,fpwiny,ansy)
            print "fp0: abs(mxy[0]-fp0x)=%d abs(mxy[1]-fp0y)=%d)" % (abs(mxy[0]-fp0x), abs(mxy[1]-fp0y))
  Routine FP2
    CodeComponent mouse_sound_code
      Begin Experiment:
        #default FP2 variables
        FP2_window_color = [255,255,255]

        #timer for FP2
        FP2_fbk_timer = core.CountdownTimer(1)

        sound_win = sound.Sound(u'A', secs=0.2)
        sound_win.setVolume(0.5)

        sound_fail = sound.Sound(u'F', secs=0.2)
        sound_fail.setVolume(0.5)
      Begin Routine:
        print 'made it to FP2'


        #resettimer must  set routineTimer to same as time as long as routine is
        routineTimer.reset(5)
        windowTimer.reset(EYEWINTIMECONST)
        FP2_fbk_timer.reset(1) # 1 second of fixation required for FP2

        #LDS EDIT:
        #need to add this to move the fixation point other wise bug in menu of change on repeat taking $fp2loc does not work

        FP2_square.setPos(fp2loc)

        # get new location of FP2 for window
        fp2x = fp2loc[0]
        fp2y = fp2loc[1]

        #if showwin == 1:
        #    print "inside FP2_window show: %d %d" % (fp2loc[0], fp2loc[1])


        # if trialtype==2 (antisaccade task) make the window at the opposite location of the FP2
        if trialtype == 1:
            if showwin == 1:
                FP2_window.setPos(fp2loc)
                FP2_window.draw()
        elif trialtype == 2:
            fp2x = -fp2x
            fp2y = -fp2y
            if showwin == 1:
                FP2_window.setPos([fp2x,fp2y])
                FP2_window.draw()

        if showwin == 0:
            FP2_window.opacity = 0
            FP2_window.draw()

        #fp windows set here
        fp2winx = fpwin_all
        fp2winy = fpwin_all

        # adjust window size based on eccentricity of fp2 location
        # so small
        #fp2winx = max(fp2loc)/3;
        #fp2winy = max(fp2loc)/3;
        #but a minimum of 1 degree
        #if fp2winx < 1:
        #    fp2winx = 1
        #    fp2winy = 1

        FP2_end_flag = 0 # set flag to 0 to add visual pause/color delay and sound

        if trialtype == 3:
            dps = 10 # 10 degrees per second
            spdist = 20 # 20 degrees distance for smooth pursuit analysis
            spstarttime = StartupClock.getTime()
            spendtime = spstarttime + (spdist / dps)
            spendtime_rel = spdist/dps
            if fp2x < 0:
                spdirx = 1; spdiry = 0;
            elif fp2x > 0:
                spdirx = -1; spdiry = 0;
            elif fp2y > 0:
                spdirx = 0; spdiry = -1;
            elif fp2y < 0:
                spdirx = 0; spdiry = 1;
            # give one degree extra for 'catchup saccade'
            fp2x = fp2x -spdirx*1;
            fp2y = fp2y -spdiry*1;




        # add a timer for feedback timer for FP2 (at least 1 sec of fixation requested)
        if trialtype == 3:
            FP2_fbk_timer = core.CountdownTimer(spendtime_rel)
        #else: # just fixation/saccade events so no delay for starting feedback timer
        #    FP2_fbk_timer = core.CountdownTimer(1)
      End Routine:
        #play sound according to win or fail

        #print 'mxy[0]:',mxy[0],'mxy[1]:',mxy[1]
        #print 'fp2x:',fp2x,'fp2y:',fp2y
        #print 'fp2winx:',fp2winx,'fp2winy:',fp2winy
        #print '==========='

        if ( abs(diffx) > fp2winx or abs(diffy) > fp2winy ): #and FP2_rep.finished == 1:
            sound_fail.play()

        if ( abs(diffx) <= fp2winx or abs(diffy) <= fp2winy ): #and FP2_rep.finished == 1:
            sound_win.play()
            FP2_fbk_timer.add(0.50000)

        if eyetracker:
            eyetracker.setRecordingState(False)
            print "FP2: eyetracker.setRecordingState(False)"
            #add eye-track data to data file
            trials.addData("FP2:completedJumptoFP2", True)
      Each Frame:
        if moe == 1:
            mxy = mouse.getPosition()
            # could try using numpy np. instead but this for now:
            mxy = [mxy[0]/mxydiv_factor,mxy[1]/mxydiv_factor]
            x=mxy[0] # this in degrees now
            y=mxy[1]
        elif moe == 2:
            # get /eye tracker gaze/ position
            gpos=eyetracker.getPosition()
            if type(gpos) in [list,tuple]:
                x,y=gpos[0], gpos[1]
        elif moe == 200:
            res = iViewXAPI.iV_GetSample(byref(sampleData))
            mxy[0] = sampleData.leftEye.gazeX
            mxy[1] = sampleData.leftEye.gazeY
            x = (mxy[0] - screen_width/2)/pixperdegree
            y = ((screen_height/2) - mxy[1])/pixperdegree
        #update eye position

        #determine diff between eye/mouse and fp
        diffx = x-fp2x
        diffy = y-fp2y

        if debugflag == 1:
            print "fp2b: x:%d-%d=%d y:%d-%d=%d" % (mxy[0],fp2x,diffx,mxy[1],fp2y,diffy)

        #if showwin == 1:
        #    FP2_window.setPos(fp2loc)
        #    FP2_window.draw()

        # if inside window then end routine
        if trialtype is not 3: # just fixations then look for eye position window, if it's a smooth pursuit don't use a window until the end (FP3-final)
            if (  abs(diffx) < fp2winx and abs(diffy) < fp2winy ):
                FP2_window_color = 'green'
                #FP2_square.setFillColor((1,0,0),'rgb')
                # not inside window yet, but if first time inside, then start timer 1 second
                if FP2_end_flag == 0:
                    FP2_fbk_timer.reset(1) #require 1 second of fixation
                    FP2_end_flag = 1
                else: #countdowntimer
                    if FP2_fbk_timer.getTime() < 0:
                        FP2_rep.finished = 1 # this flag will end the routine from repeating
            else: # if outside of window reset the timer
                FP2_fbk_timer.reset(1)
                FP2_window_color = 'red'


        elif trialtype is 3: # smooth pursuit trial
            spnowtime_rel = StartupClock.getTime() - spstarttime
            newFP2pos = [fp2x+spnowtime_rel*dps*spdirx, fp2y+spnowtime_rel*dps*spdiry]
            print newFP2pos
            FP2_square.pos = newFP2pos
            if showwin == 1:
                FP2_window.pos = newFP2pos
                FP2_window.draw()
            if spnowtime_rel > spendtime_rel:
                FP2_rep.finished = 1
                continueRoutine = False

        if (FP2_rep.finished == 1):
            if (FP2_fbk_timer.getTime() > 0):
                continueRoutine = True
            else:# ran out of feedback time
                continueRoutine = False # try to force end of routine if eye is in window of FP2


        if rendeye == 1 :
        #    Image.setImage(images[index])
        #    Image.draw(window)
            #annoyingly eye position is returned as pixels, not degrees, upper left is 0,0.
            Shape01.setFillColor([0, 0, 0])
            #sampleData.leftEye.gazeX = sampleData.leftEye.gazeX - screen_width/2
            #sampleData.leftEye.gazeY = -1 * (sampleData.leftEye.gazeY - screen_height/2)
            #x= mxy[0]- (screen_width/2)
            #y= (-1 * mxy[1])
            #x = mxy[0] - screen_width/2
            #y = (screen_height/2) - mxy[1]
            #Shape01.setPos([sampleData.leftEye.gazeX, sampleData.leftEye.gazeY])
            Shape01.setPos([x, y])
            Shape01.draw()
            dispcountdown1 = routineTimer.getTime()
            dispcountdown2 = FP2_fbk_timer.getTime()
            #if dispcountdown2 < 0:
            #    Text01.setColor((128,128,128),'rgb255') # set color to gray when count is <0
            #else:
            #    Text01.setColor((254,254,254),'rgb255')
            tmptxt = 'FP2: dx=%0.1f  dy=%0.1f\n   rT=%0.2f  wT=%0.2f' %(x-fp0x,y-fp0y,dispcountdown1,dispcountdown2)
            Text01.setText(text=tmptxt) # using setTextsuppresses logmsg
            Text01.setPos([x,y])
            Text01.draw()
            #update eye position
            if debugflag == 1:
                diffx= mxy[0]-fp2x
                diffy= mxy[1]-fp2y
                print "fp2a: x:%d-%d=%d y:%d-%d=%d" % (mxy[0],fp2x,diffx,mxy[1],fp2y,diffy)
    PolygonComponent FP2_square
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 5
      lineWidth = 0
      units = deg
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
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    PolygonComponent FP2_window
      opacity = 0.4
      fillColor [set every frame] = $FP2_window_color
      stopVal [duration (s)] = 5
      pos = [fp2winx*2,fp2winy*2]
      lineWidth = 0
      units = deg
      lineColor [set every frame] = $FP2_window_color
      startVal [time (s)] = 0.0
      size = [fpwin_all*2,fpwin_all*2]
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  Routine instructions
    CodeComponent instr_code
      Begin Routine:
        # First decide which ttype it is from trialtype variable
        # once trialtype is decided, ask if instructions have been displayed
        # if not display them once, and set ttype1_instr = 1; then next time won't be displayed

        if (trialtype == 1 and ttype1_instr == 0):
            ttype1_instr = 1
            text.text = "Look at the white dot"
        elif (trialtype == 2 and ttype2_instr == 0):
            ttype2_instr = 1
            text.text = "When red dot disappears, hold your gaze at the opposite mirror location of the white dot."
        elif (trialtype == 3 and ttype3_instr == 0):
            ttype3_instr = 1
            text.text = "Follow the dot as it moves."
        else:
        #    #intstr_rep.finished=1 # this did not work to end routine
            text.text = ""
            continueRoutine = False
            text.finished = 1
      Each Frame:
        if (trialtype == 1 and ttype1_instr == 1):
            continueRoutine = False
        elif (trialtype == 2 and ttype2_instr == 1):
            continueRoutine = False
    TextComponent text
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
  Routine thanks
    TextComponent thanksText
      wrapWidth = 800
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 50
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      text:
        This is the end of the experiment.

        Thanks!!! :)
Flow
  Routine StartupInstr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = FPtrialTypes4.xlsx
    loopType = sequential
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [{'fp2loc': [5, 0], 'arraynum': 1, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [-5, 0], 'arraynum': 2, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, 5], 'arraynum': 3, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, -5], 'arraynum': 4, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [10, 0], 'arraynum': 5, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [-10, 0], 'arraynum': 6, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, 10], 'arraynum': 7, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, -10], 'arraynum': 8, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [15, 0], 'arraynum': 9, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [-15, 0], 'arraynum': 10, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, 15], 'arraynum': 11, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, -15], 'arraynum': 12, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [20, 0], 'arraynum': 13, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [-20, 0], 'arraynum': 14, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, 20], 'arraynum': 15, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, -20], 'arraynum': 16, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [25, 0], 'arraynum': 17, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [-25, 0], 'arraynum': 18, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, 25], 'arraynum': 19, 'polyColor': u'white', 'trialtype': 1},
      {'fp2loc': [0, -25], 'arraynum': 20, 'polyColor': u'white', 'trialtype': 1}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
    LoopInitiator instr_rep loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = instr_rep_cont
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      Routine instructions
    LoopTerminator instr_rep
    Routine ITI
    LoopInitiator FP0_rep loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine FP0
    LoopTerminator FP0_rep
    LoopInitiator FP1_rep loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine FP1
    LoopTerminator FP1_rep
    LoopInitiator FP2_rep loopType="TrialHandler"
      loopType = sequential
      nReps = FP2cont
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      Routine FP2
    LoopTerminator FP2_rep
  LoopTerminator trials
  Routine thanks
